PsychoPy2experiment version="2023.2.2"
Settings
  Enable Escape = False
  Experiment info = {'participant': 'Optional', 'email': 'Optional@gmail.com', 'gender (*)': 'Female', 'age (*)': '25', 'highest degree obtained (high school = 12) (*)': '12', 'right or left handedness (*)': 'right', 'profession (*)': 'profession'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['imgPerception/Slide1.png', 'imgPerception/Slide2.png', 'imgPerception/Slide3.png', 'imgPerception/Slide4.png', 'imgPerception/Slide5.png', 'imgPerception/Slide6.png', 'imgPerception/Slide7.png', 'imgPerception/Slide8.png', 'imgPerception/Slide9.png', 'imgPerception/Slide10.png', 'imgPerception/Slide11.png', 'imgPerception/Slide12.png', 'imgPerception/Slide13.png', 'imgPerception/Slide14.png', 'imgPerception/Slide15.png', 'imgPerception/Slide16.png', 'imgPerception/Slide17.png', 'imgPerception/Slide18.png', 'imgPerception/Slide19.png', 'imgPerception/Slide20.png', 'imgPerception/Slide21.png', 'imgPerception/Slide22.png', 'imgPerception/Slide23.png', 'imgPerception/Slide24.png', 'imgPerception/Slide25.png', 'imgPerception/Slide26.png', 'imgPerception/Slide27.png', 'imgPerception/Slide28.png', 'imgPerception/Slide29.png', 'imgPerception/Slide30.png', 'imgPerception/Slide31.png', 'imgPerception/Slide32.png', 'imgPerception/Slide33.png', 'imgPerception/Slide34.png', 'imgPerception/Slide35.png', 'imgPerception/Slide36.png', 'imgPerception/Slide37.png', 'imgPerception/Slide38.png', 'imgPerception/Slide39.png', 'imgPerception/Slide40.png', 'imgPerception/Slide41.png', 'imgPerception/Slide42.png', 'imgPerception/Slide43.png', 'imgPerception/Slide44.png', 'imgPerception/Slide45.png', 'imgPerception/Slide46.png', 'imgPerception/Slide47.png', 'imgPerception/Slide48.png', 'imgPerception/Slide49.png', 'imgPerception/Slide50.png', 'imgPerception/Slide51.png', 'imgPerception/Slide52.png', 'imgPerception/Slide53.png', 'imgPerception/Slide54.png', 'imgPerception/Slide55.png', 'imgPerception/Slide56.png', 'imgPerception/Slide57.png', 'imgPerception/Slide58.png', 'imgPerception/Slide59.png', 'imgPerception/Slide60.png', 'imgPerception/Slide61.png', 'imgPerception/Slide62.png', 'imgPerception/Slide63.png', 'imgPerception/Slide64.png', 'imgPerception/Slide65.png', 'imgPerception/Slide66.png', 'imgPerception/Slide67.png', 'imgPerception/Slide68.png', 'imgPerception/Slide69.png', 'imgPerception/Slide70.png', 'imgPerception/Slide71.png', 'imgPerception/Slide72.png', 'imgPerception/Slide73.png', 'imgPerception/Slide74.png', 'imgPerception/Slide75.png', 'imgPerception/Slide76.png', 'imgPerception/Slide77.png', 'imgPerception/Slide78.png', 'imgPerception/Slide79.png', 'imgPerception/Slide80.png', 'imgPerception/Slide81.png', 'imgPerception/Slide82.png', 'imgPerception/Slide83.png', 'imgPerception/Slide84.png', 'imgPerception/Slide85.png', 'imgPerception/Slide86.png', 'imgPerception/Slide87.png', 'imgPerception/Slide88.png', 'imgPerception/Slide89.png', 'imgPerception/Slide90.png', 'imgPerception/Slide91.png', 'imgPerception/Slide92.png', 'imgPerception/Slide93.png', 'imgPerception/Slide94.png', 'imgPerception/Slide95.png', 'imgPerception/Slide96.png', 'imgPerception/Slide97.png', 'imgPerception/Slide98.png', 'imgPerception/Slide99.png', 'imgPerception/Slide100.png', 'imgPerception/Slide101.png', 'imgPerception/Slide102.png', 'imgPerception/Slide103.png', 'imgPerception/Slide104.png', 'imgPerception/Slide105.png', 'imgPerception/Slide106.png', 'imgPerception/Slide107.png', 'imgPerception/Slide108.png', 'imgPerception/Slide109.png', 'imgPerception/Slide110.png', 'imgPerception/Slide111.png', 'imgPerception/Slide112.png', 'imgPerception/Slide113.png', 'imgPerception/Slide114.png', 'imgPerception/Slide115.png', 'imgPerception/Slide116.png', 'imgPerception/Slide117.png', 'imgPerception/Slide118.png', 'imgPerception/Slide119.png', 'imgPerception/Slide120.png', 'imgPerception/Slide121.png', 'imgPerception/Slide122.png', 'imgPerception/Slide123.png', 'imgPerception/Slide124.png', 'imgPerception/Slide125.png', 'imgPerception/Slide126.png', 'imgPerception/Slide127.png', 'imgPerception/Slide128.png', 'imgPerception/Slide129.png', 'imgPerception/Slide130.png', 'imgPerception/Slide131.png', 'imgPerception/Slide132.png', 'imgPerception/Slide133.png', 'imgPerception/Slide134.png', 'imgPerception/Slide135.png', 'imgPerception/Slide136.png', 'imgPerception/Slide137.png', 'imgPerception/Slide138.png', 'imgPerception/Slide139.png', 'imgPerception/Slide140.png', 'imgPerception/Slide141.png', 'imgPerception/Slide142.png', 'imgPerception/Slide143.png', 'imgPerception/Slide144.png', 'imgPerception/Slide145.png', 'imgPerception/Slide146.png', 'imgPerception/Slide147.png', 'imgPerception/Slide148.png', 'imgPerception/Slide149.png', 'imgPerception/Slide150.png', 'imgPerception/Slide151.png', 'imgPerception/Slide152.png', 'imgPerception/Slide153.png', 'imgPerception/Slide154.png', 'imgPerception/Slide155.png', 'imgPerception/Slide156.png', 'imgPerception/Slide157.png', 'imgPerception/Slide158.png', 'imgPerception/Slide159.png', 'imgPerception/Slide160.png', 'imgPerception/Slide161.png', 'imgPerception/Slide162.png', 'imgPerception/Slide163.png', 'imgPerception/Slide164.png', 'imgPerception/Slide165.png', 'imgPerception/Slide166.png', 'imgPerception/Slide167.png', 'imgPerception/Slide168.png', 'imgPerception/Slide169.png', 'imgPerception/Slide170.png', 'imgPerception/Slide171.png', 'imgPerception/Slide172.png', 'imgPerception/Slide173.png', 'imgPerception/Slide174.png', 'imgPerception/Slide175.png', 'imgPerception/Slide176.png', 'imgPerception/Slide177.png', 'imgPerception/Slide178.png', 'imgPerception/Slide179.png', 'imgPerception/Slide180.png', 'imgPerception/Slide181.png', 'imgPerception/Slide182.png', 'imgPerception/Slide183.png', 'imgPerception/Slide184.png', 'imgPerception/Slide185.png', 'img/angersmetz.jpg', 'img/clavier.jpg', 'img/Colour_Trial.png', 'img/Editing images.pptx', 'img/espoireamitie.jpg', 'img/Face_Trial.png', 'img/hollande.jpg', 'img/imgblank.jpg', 'img/Letter_Trial.png', 'img/Map_Trial.png', 'img/Shape_Trial.png', 'img/T.png', 'img/vivacite 2.jpg', 'img/vivacite 3.jpg', 'img/vivacite 4.jpg', 'img/vivacite.jpg', 'audioStims/access.wav', 'audioStims/altruism.wav', 'audioStims/anxiety.wav', 'audioStims/artichokes.wav', 'audioStims/atlanta.wav', 'audioStims/atlanticcity.wav', 'audioStims/austin.wav', 'audioStims/bad.wav', 'audioStims/baguette.wav', 'audioStims/baltimore.wav', 'audioStims/banana.wav', 'audioStims/barackobama.wav', 'audioStims/bathtub.wav', 'audioStims/berniesanders.wav', 'audioStims/boston.wav', 'audioStims/bottle.wav', 'audioStims/bowl.wav', 'audioStims/bradpitt.wav', 'audioStims/brilliance.wav', 'audioStims/broom.wav', 'audioStims/bucket.wav', 'audioStims/burrito.wav', 'audioStims/care.wav', 'audioStims/cauliflower.wav', 'audioStims/chicken.wav', 'audioStims/cincinnati.wav', 'audioStims/cold.wav', 'audioStims/Color.wav', 'audioStims/comfort.wav', 'audioStims/convention.wav', 'audioStims/country.wav', 'audioStims/cucumber.wav', 'audioStims/culture.wav', 'audioStims/dallas.wav', 'audioStims/dark.wav', 'audioStims/decision.wav', 'audioStims/detroit.wav', 'audioStims/discipline.wav', 'audioStims/discovery.wav', 'audioStims/discussion.wav', 'audioStims/down.wav', 'audioStims/elonmusk.wav', 'audioStims/emmastone.wav', 'audioStims/employment.wav', 'audioStims/espresso.wav', 'audioStims/evocation.wav', 'audioStims/Face.wav', 'audioStims/fidelity.wav', 'audioStims/fig.wav', 'audioStims/flamingo.wav', 'audioStims/friendship.wav', 'audioStims/future.wav', 'audioStims/generality.wav', 'audioStims/generosity.wav', 'audioStims/georgewbush.wav', 'audioStims/greenapple.wav', 'audioStims/greenpepper.wav', 'audioStims/guacamole.wav', 'audioStims/hamster.wav', 'audioStims/health.wav', 'audioStims/help.wav', 'audioStims/hope.wav', 'audioStims/houston.wav', 'audioStims/illusion.wav', 'audioStims/impression.wav', 'audioStims/inference.wav', 'audioStims/johnnydepp.wav', 'audioStims/juliaroberts.wav', 'audioStims/justice.wav', 'audioStims/justinbieber.wav', 'audioStims/justintimberlake.wav', 'audioStims/kamalaharris.wav', 'audioStims/kangarou.wav', 'audioStims/kansascity.wav', 'audioStims/kevinhart.wav', 'audioStims/koala.wav', 'audioStims/ladybug.wav', 'audioStims/lasvegas.wav', 'audioStims/laziness.wav', 'audioStims/learning.wav', 'audioStims/left.wav', 'audioStims/lemon.wav', 'audioStims/leonardodicaprio.wav', 'audioStims/Letter.wav', 'audioStims/light.wav', 'audioStims/lighter.wav', 'audioStims/long.wav', 'audioStims/Map.wav', 'audioStims/mariotest2.wav', 'audioStims/markzuckerberg.wav', 'audioStims/marshmellow.wav', 'audioStims/matthewmcconaughey.wav', 'audioStims/memphis.wav', 'audioStims/mention.wav', 'audioStims/merit.wav', 'audioStims/miami.wav', 'audioStims/michaelphelps.wav', 'audioStims/minneapolis.wav', 'audioStims/mission.wav', 'audioStims/motivation.wav', 'audioStims/mystery.wav', 'audioStims/nashville.wav', 'audioStims/noise.wav', 'audioStims/opinion.wav', 'audioStims/oprahwinfrey.wav', 'audioStims/pan.wav', 'audioStims/panda.wav', 'audioStims/penalty.wav', 'audioStims/penguin.wav', 'audioStims/philadelphia.wav', 'audioStims/philosophy.wav', 'audioStims/phoenix.wav', 'audioStims/pineapple.wav', 'audioStims/pomogranate.wav', 'audioStims/portland.wav', 'audioStims/possession.wav', 'audioStims/prejudice.wav', 'audioStims/princewilliam.wav', 'audioStims/prove.wav', 'audioStims/pumpkin.wav', 'audioStims/quality.wav', 'audioStims/reality.wav', 'audioStims/reasoning.wav', 'audioStims/redwine.wav', 'audioStims/reject.wav', 'audioStims/retrieve.wav', 'audioStims/right.wav', 'audioStims/rigor.wav', 'audioStims/rihanna.wav', 'audioStims/round.wav', 'audioStims/routine.wav', 'audioStims/sarahjessicaparker.wav', 'audioStims/seattle.wav', 'audioStims/selenagomez.wav', 'audioStims/Semantic.wav', 'audioStims/sentence.wav', 'audioStims/serenawilliams.wav', 'audioStims/shakira.wav', 'audioStims/Shape.wav', 'audioStims/silence.wav', 'audioStims/smart.wav', 'audioStims/society.wav', 'audioStims/spirit.wav', 'audioStims/stevejobs.wav', 'audioStims/strawberry.wav', 'audioStims/summary.wav', 'audioStims/taylorswift.wav', 'audioStims/tripod.wav', 'audioStims/up.wav', 'audioStims/victory.wav', 'audioStims/warmth.wav', 'audioStims/washingtondc.wav', 'audioStims/whiteshark.wav', 'audioStims/willsmith.wav', 'audioStims/year.wav', 'audioStims/zucchini.wav']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = eBIP_1116
  keyboardBackend = ioHub
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Routines
  Routine consent_form
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    ImageComponent image
      image [set every repeat] = $consent_form_sequence
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = green
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you have read this part of the consent form and AGREE to participate, press <Space>.
        If you do NOT agree to participate, press <ESC>.
    KeyboardComponent consent_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine key_test
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    TextComponent key_test_title
      color = red
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Keyboard Calibration
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    TextComponent key_test_text
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this test, you will have to use the following keys on the TOP LEFT part of your keyboard:
                      '1',  '2',  '3',  '4',  '5'

        Press the buttons one by one, make sure your keyboard works well.

        The button you just pressed is:
    TextComponent key_test_display
      color = black
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_test_show
      allowedKeys = '1','2','3','4','5','left','right','space','t','b','y','g','r','comma','return'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent key_test_present
      Code Type = Both
      Begin JS Routine:
        key_test_text.setAlignHoriz('left')
        key_test_display.text = '';
      Begin Routine:
        textFill = ''
      Each Frame:
        keysGet = key_test_show.keys

        if keysGet == 'return':
            continueRoutine = False
        else:
            key_test_display.setText(keysGet)
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();

        if (theseKeys.length > 0) {
          keysGet = theseKeys[theseKeys.length-1];
          }


        if (keysGet == 'return'){
            continueRoutine = false;
        } else {
            key_test_display.text = keysGet;
        }
    TextComponent key_test_continue
      color = green
      letterHeight = 0.03
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your keyboard is working, press <Enter>.
    ImageComponent key_test_image
      image = img/clavier.jpg
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.65, 0.3)
      startVal [time (s)] = 0.0
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  Routine begin_instruction
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    TextComponent begin_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Let's start the first part of the test, are you ready?
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    KeyboardComponent begin_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent begin_continue
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Proceed by pressing < Space >.
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  Routine volume_test
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    TextComponent volume_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Volume Calibration
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    KeyboardComponent volume_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent volume_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Make sure you can hear the music and that the volume is correct.

        We recommend that you wear headphones for this test and turn the sound up to a comfortable level for you.
    TextComponent volume_continue
      color = green
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the < Space > key to continue.
        If you don't hear the music, press the <Esc> key.
    CodeComponent volume_align
      Code Type = Both
      Begin JS Routine:
        volume_text.setAlignHoriz('left')
    SoundComponent sound_1
      hamming = False
      saveStartStop = False
      sound = audioStims/mariotest2.wav
      startVal [time (s)] = 0.0
      volume = 8
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  Routine vivid_instruction
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    TextComponent vivid_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 1/4: Evaluation of Vividness of mental imagery  
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    KeyboardComponent vivid_response
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent vivid_mona_lisa
      color = green
      letterHeight = 0.03
      pos = (0, 0.33)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = For example, imagine the painting Mona Lisa.
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    TextComponent vivid_rating
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 3
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      text:
        We will describe scenarios that you will have to imagine in your mind. Then we will ask you to give a score from 1 to 5 to evaluate its liveliness.

        Assess the vividness of your mental image with a score from 1 to 5:

        1: No image is visible.
        2: the image is vague and imprecise.
        3: The image is moderately clear and sharp.
        4: the image is relatively clear, almost as sharp and precise as a visual perception.
        5: the image is perfectly clear, as sharp and precise as real visual perception.
    ImageComponent vivid_image
      image = img/vivacite.jpg
      pos = (0, -0.28)
      saveStartStop = False
      size = (0.95, 0.2)
      startVal [time (s)] = 3
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    TextComponent vivid_text
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 4
      text = Enter a rating (1-5) to continue. Use the TOP LEFT part of your keyboard.
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    CodeComponent vviq_align
      Code Type = Both
      Begin JS Routine:
        vivid_rating.setAlignHoriz('left')
        vivid_title.setAlignHoriz('left')
  Routine vviq_instruction
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    TextComponent vviq_instruction_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 1/4: Vividness Test
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    TextComponent vviq_instruction_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We are going to describe some scenarios to you, which you need to imagine in your mind.
        Next, we'll ask you to rate it from 1 to 5 to assess its vividness

        This task takes about 3 minutes.
    TextComponent vviq_instruction_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the < Space > key to proceed.
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    KeyboardComponent vviq_instruction_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent vviq_instruction_good
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Good!
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  Routine vviq_task
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    TextComponent vviq_task_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 1/4: Test of Mental Imagery Vividness
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    KeyboardComponent key_resp_vviq
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent vviq_task_score
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Give a score of 1 to 5 to evaluate the vividness of your visual mental imagery
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    TextComponent vviq_task_idx
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vviq_idx
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    TextComponent vviq_task_item
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    TextComponent vviq_task_senario
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $senario
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  Routine vviq_feedback
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    TextComponent vviq_feedback_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 1/4: Vividness test result
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    CodeComponent vviq_feedback_text
      Code Type = Both
      Begin Experiment:
        msg='doh'
        colortext = 'black'
      Begin JS Experiment:
        msg='doh';
        colortext = 'black';
        previousLength = 0;
      Begin JS Routine:
        responses = psychoJS.experiment._trialsData;
        subBlock = responses.slice(previousLength);
        console.log("subBlock est : ");
        console.log(subBlock);

        let myvviqscore = 0;
        subBlock.forEach(entry => {
            let value = entry["key_resp_vviq.keys"];
            // Check if the value is a number or can be converted to a number
            if (!isNaN(value)) {
                myvviqscore += parseInt(value);
            } else {
                console.log('Invalid value:', value);
            }
        });

        if (myvviqscore > 70) {
            msg = "For this vividness test, you got a total score of "+ myvviqscore.toFixed(0) + " out of 80. I invite you to comment on our website and write us an email at the end of the session.";
            colortext = 'green';
        } else if (myvviqscore >=30) {
            msg = "For this vividness test, you got a total score of "+ myvviqscore.toFixed(0) + " out of 80. I invite you to comment on our website and write us an email at the end of the session.";
            colortext = 'green';
        } else {
            msg = "For this vividness test, you got a total score of "+ myvviqscore.toFixed(0) + " out of 80. I invite you to comment on our website and write us an email at the end of the session.";
            colortext = 'red';
        }
      Begin Routine:
        score1 = vviq_trials.data['key_resp_vviq.keys']
        myvviqscore = sum([int(item) for item in score1])
        if myvviqscore > 70 :
            msg = "For this vividness test, you got a total score of %i out of 80. Your vividness ability is above the general population. Congratulations! I invite you to comment on our website and write us an email at the end of the session." %(myvviqscore)
            colortext = 'green'
        elif myvviqscore >= 30:
            msg = "For this vividness test, you obtained a total score of %i out of 80. Congratulations! I invite you to comment on our post at the end of the session." %(myvviqscore)
            colortext = 'green'
        else :
            msg = "For this vividness test, you obtained a total score of %i out of 80. I invite you to contact us and do the following part which evaluates your mental image by category." %(myvviqscore)
            colortext = 'red'
    TextComponent vviq_feedback_proceed
      color = green
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press < Space > key to proceed to the second part.
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    KeyboardComponent vviq_feedback_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent vviq_feedback_result
      color [set every frame] = $colortext
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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  Routine imagery_instruction
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    TextComponent imagery_instruction_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 2/4: Visual Mental Imagery Test
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    TextComponent imagery_instruction_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this second part, we will evaluate your Visual Mental Imagery through tests covering five categories: shape, color, face, letter and map.

        For each category, you will start with a trial. Then, you will need to respond to the following 15 tests.

        This Visual Mental Imagery task will take about 10 minutes.
    TextComponent imagery_instruction_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press < Space > to proceed.
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    KeyboardComponent imagery_instruction_proceed_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent imagery_instruction_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        imagery_instruction_text.setAlignHoriz('left')
  Routine imagery_task_trials
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    TextComponent imagery_task_trials_question
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_question
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    SoundComponent imagery_task_trials_word1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      volume = 8
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    SoundComponent imagery_task_trials_word2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      volume = 8
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    SoundComponent imagery_task_trials_instruction
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 4
      volume = 8
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    KeyboardComponent imagery_task_trials_response
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $imagery_task_trials_instruction.status==FINISHED
      store = nothing
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    TextComponent imagery_task_trials_order_instruction
      color = black
      letterHeight = 0.03
      pos = (0, 0.13)
      saveStartStop = False
      startVal [time (s)] = 4.5
      text [set every repeat] = $order_instruction
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    ImageComponent imagery_task_trials_img1
      image [set every repeat] = $img1
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.4, 0.25)
      startVal [time (s)] = 4.5
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    TextComponent imagery_task_trials_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 4.5
      text [set every repeat] = $task_continue
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    CodeComponent imagery_task_trials_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        imagery_task_trials_instruction.setAlignHoriz('left')
  Routine imagery_task_trials_vividness
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    TextComponent imagery_task_trials_vividness_question
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_question
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    TextComponent imagery_task_trials_vividness_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_vividness
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    KeyboardComponent imagery_task_trials_vividness_response
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent imagery_task_trials_vividness_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        imagery_task_trials_vividness_text.setAlignHoriz('left')
  Routine resting
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    TextComponent imagery_task_trials_rest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine imagery_task
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    TextComponent imagery_task_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 2/4: Test of Visual Mental Imagery
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    TextComponent imagery_task_idx
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $imagery_task_items.thisN
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    SoundComponent imagery_task_word1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      volume = 8
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    SoundComponent imagery_task_word2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      volume = 8
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    SoundComponent imagery_task_instruction
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 4
      volume = 8
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    TextComponent imagery_task_text
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = Give your answer: first (key "1") or second (key "2").
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    KeyboardComponent key_resp_vmi
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [condition] = $imagery_task_instruction.status==FINISHED
      storeCorrect = True
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  Routine imagery_task_prepare
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    TextComponent imagery_task_prepare_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 2/4 : Test of Imagination
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    TextComponent imagery_task_prepare_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bravo!

        Now let's start the tests.

        Take your time to answer each question.
    KeyboardComponent imagery_task_prepare_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent imagery_task_prepare_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When you are ready, press the < Space > key to proceed.
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    CodeComponent imagery_task_prepare_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        imagery_task_prepare_text.setAlignHoriz('left')
  Routine imagery_task_vividness
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    TextComponent imagery_task_vividness_title
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Give a score of 1 to 4 to rate the vividness of your image.
    KeyboardComponent vividness
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine perception_instruction
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    TextComponent perception_instruction_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Part 3/4 : Test of Perception
    TextComponent perception_instruction_task
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this third part, we are going to show you pictures of objects, food, celebrities, or written words that we have asked you to imagine throughout the part 2 of this test.

        During this part, you will answer the questions by comparing the visual characteristics perceived based on the pictures that you will be able to SEE.

        The perception test takes approximately 10 minutes, with 60 trials in total.

        Attention, for the map test, select the city indicated by a red dot (whether it appears first or second).

        After each question, rate the level of CONFIDENCE of your answer:
        1: I am not at all confident in my answer.
        2: I'm a little confident about my answer.
        3: I am confident in my answer.
        4: I am absolutely sure of my answer.
    KeyboardComponent perception_instruction_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent perception_instruction_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press < Space > to proceed. 
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    CodeComponent perception_instruction_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        perception_instruction_text.setAlignHoriz('left')
  Routine perception_task
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    TextComponent perception_task_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 3: Test of Perception
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    SoundComponent perception_task_word1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      volume = 8
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    ImageComponent perception_task_img1
      image [set every repeat] = $img1
      saveStartStop = False
      size = (1.16, 0.64)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    SoundComponent perception_task_word2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      volume = 8
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    ImageComponent perception_task_img2
      image [set every repeat] = $img2
      saveStartStop = False
      size = (1.16, 0.64)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    SoundComponent perception_task_instruction
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 4
      volume = 8
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    ImageComponent perception_task_img3
      image [set every repeat] = $imgCompare
      saveStartStop = False
      size = (1.16, 0.64)
      startVal [time (s)] = 4
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    KeyboardComponent perception
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [condition] = $perception_task_instruction.status==FINISHED
      storeCorrect = True
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    TextComponent perception_task_text
      color = green
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = Give your answer: first (key "1") or second (key "2").
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  Routine perception_task_confidence
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    TextComponent perception_task_confidence_idx
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $perception_task_trial.thisN
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    TextComponent perception_task_confidence_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Give a score from 1 to 4 to assess your CONFIDENCE.

        1: I am not at all confident in my answer.
        2: I'm a little confident about my answer.
        3: I am confident in my answer.
        4: I am absolutely sure of my answer.
    KeyboardComponent confidence
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent perception_task_confidence_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        perception_task_confidence_text.setAlignHoriz('left')
  Routine imagery_task_feedback
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    TextComponent imagery_task_feedback_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 2/4: Test of Visual Mental Imagery
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    CodeComponent imagery_task_feedback_text
      Code Type = Both
      Begin Experiment:
        msg='doh'
        colortext = 'black'
      Begin JS Experiment:
        msg='doh';
        colortext = 'black';
      Begin JS Routine:
        responses = psychoJS.experiment._trialsData;
        subBlock = responses.slice(previousLength + 1);
        console.log("subBlock est : ");
        console.log(subBlock);

        let meanRT = 0;
        subBlock.forEach(entry => {
            let value = parseFloat(entry["key_resp_vmi.rt"]);
            // Check if the value is a number
            if (!isNaN(value)) {
                meanRT += value;
            } else {
                console.log('Invalid RT value:', value);
            }
        });
        meanRT /= subBlock.length;

        let corrRate = 0;
        subBlock.forEach(entry => {
            let respKeys = entry["key_resp_vmi.keys"];
            let correctAns = entry["correctAns"] ? entry["correctAns"].toString() : null;
            if (respKeys == correctAns) {
                corrRate += 1;
                entry["key_resp_vmi.corr"] = 1;
            } else {
                entry["key_resp_vmi.corr"] = 0;
            }
        });
        corrRate = corrRate / subBlock.length * 100;

        console.log("meanRt est : ");
        console.log(meanRT);

        if (corrRate > 70) {
            msg = "You answered "+ corrRate.toFixed(0) + " percent of trials correctly with an average response time of " + meanRT.toFixed(1) + " seconds. Bravo! Keep going!" ;
            colortext = 'green';
        } else {
            msg = "You answered "+ corrRate.toFixed(0) + " percent of trials correctly with an average response time of " + meanRT.toFixed(1) + " seconds. Did you have difficulty imagining the items for this category? Keep going!";
            colortext = 'red';
        }

        previousLength = responses.length;
      Begin Routine:
        ntrial = len(imagery_task_items.data['key_resp_vmi.keys'])  #numpy array with size=[ntrials,ntypes]
        nCorr = imagery_task_items.data['key_resp_vmi.corr'].sum() #.std(), .mean() also available
        meanRt = imagery_task_items.data['key_resp_vmi.rt'].mean()
        corrRate = nCorr/ntrial*100

        if corrRate > 75 :
            msg = "You answered %i percent of trials correctly with an average response time of %.2f second(s). Bravo!" %(corrRate,meanRt)
            colortext = 'green'
        else :
            msg = "You answered %i percent of trials correctly with an average response time of %.2f second(s). Did you have difficulty imagining the items for this category? Keep going!" %(corrRate,meanRt)
            colortext = 'red'
    TextComponent imagery_task_feedback_text_1
      color [set every frame] = $colortext
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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    KeyboardComponent imagery_task_feedback_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent imagery_task_feedback_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When you are ready, press the < Space > key to proceed.
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  Routine perception_task_feedback
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    TextComponent perception_task_feedback_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 3/4 : Test of Perception
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    CodeComponent perception_task_feedback_text
      Code Type = Both
      Begin Experiment:
        msg='doh'
        colortext = 'black'
      Begin JS Experiment:
        msg='doh';
        colortext = 'black';
      Begin JS Routine:
        responses = psychoJS.experiment._trialsData;
        subBlock = responses.slice(previousLength + 1);
        console.log("subBlock est : ");
        console.log(subBlock);

        let meanRT = 0;
        subBlock.forEach(entry => {
            let value = parseFloat(entry["perception.rt"]);
            // Check if the value is a number
            if (!isNaN(value)) {
                meanRT += value;
            } else {
                console.log('Invalid RT value:', value);
            }
        });
        meanRT /= subBlock.length;

        let corrRate = 0;
        subBlock.forEach(entry => {
            let respKeys = entry["perception.keys"];
            let correctAns = entry["correctAns"] ? entry["correctAns"].toString() : null;
            if (respKeys == correctAns) {
                corrRate += 1;
                entry["perception.corr"] = 1;
            } else {
                entry["perception.corr"] = 0;
            }
        });
        corrRate = corrRate / subBlock.length * 100;

        console.log("meanRt est : ");
        console.log(meanRT);

        if (corrRate > 75) {
            msg = "You answered "+ corrRate.toFixed(0) + " percent of the trials correctly with an average response time of " + meanRT.toFixed(1) + " seconds. Bravo!" ;
            colortext = 'green';
        } else {
            msg = "You answered "+ corrRate.toFixed(0) + " percent of the trials correctly with an average response time of " + meanRT.toFixed(1) + " seconds. Did you encounter any difficulties?" ;
            colortext = 'red';
        }

        previousLength = responses.length;
      Begin Routine:
        ntrial = len(perception_task_trial.data['perception.keys'])  #numpy array with size=[ntrials,ntypes]
        nCorr = perception_task_trial.data['perception.corr'].sum() #.std(), .mean() also available
        meanRt = perception_task_trial.data['perception.rt'].mean()
        corrRate = nCorr/ntrial*100

        if corrRate > 75 :
            msg = "You answered %i percent of trials correctly with an average response time of %.2f second(s). Bravo!" %(corrRate,meanRt)
            colortext = 'green'
        else :
            msg = "You answered %i percent of trials correctly with an average response time of %.2f second(s). Did you have difficulty imagining the items for this category? Keep going!" %(corrRate,meanRt)
            colortext = 'red'
    TextComponent perception_task_feedback_text_1
      color [set every frame] = $colortext
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $msg
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    KeyboardComponent perception_task_feedback_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent perception_task_feedback_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press < Space > to proceed. 
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  Routine end_session
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    TextComponent end_session_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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      text:
        This is the end of tests. Thank you for your participation!


        Feel free to comment on the site or contact us:

        - Share your experience of life and your result.
        - Interested in an fMRI neuroimaging test for research.
        - ...


        Wait for the program to close or press the <Space> key to exit after 5 seconds.
    CodeComponent end_session_align
      Code Type = JS
      disabled = True
      Begin JS Routine:
        end_session_text.setAlignHoriz('left')
  Routine resource_manage
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    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = True
      disabled = True
      forceEndRoutine = False
      resources = ['Imagery item construction.xlsx', 'Imagery_domain_selection.xlsx', 'ImageryItems_en.xlsx', 'ImageryPractice_en.xlsx', 'PerceptionItems_en.xlsx', 'SemanticItems.xlsx', 'SemanticItems_test.xlsx', 'vviq_task_online.xlsx', 'imgPerception/Slide1.png', 'imgPerception/Slide2.png', 'imgPerception/Slide3.png', 'imgPerception/Slide4.png', 'imgPerception/Slide5.png', 'imgPerception/Slide6.png', 'imgPerception/Slide7.png', 'imgPerception/Slide8.png', 'imgPerception/Slide9.png', 'imgPerception/Slide10.png', 'imgPerception/Slide11.png', 'imgPerception/Slide12.png', 'imgPerception/Slide13.png', 'imgPerception/Slide14.png', 'imgPerception/Slide15.png', 'imgPerception/Slide16.png', 'imgPerception/Slide17.png', 'imgPerception/Slide18.png', 'imgPerception/Slide19.png', 'imgPerception/Slide20.png', 'imgPerception/Slide21.png', 'imgPerception/Slide22.png', 'imgPerception/Slide23.png', 'imgPerception/Slide24.png', 'imgPerception/Slide25.png', 'imgPerception/Slide26.png', 'imgPerception/Slide27.png', 'imgPerception/Slide28.png', 'imgPerception/Slide29.png', 'imgPerception/Slide30.png', 'imgPerception/Slide31.png', 'imgPerception/Slide32.png', 'imgPerception/Slide33.png', 'imgPerception/Slide34.png', 'imgPerception/Slide35.png', 'imgPerception/Slide36.png', 'imgPerception/Slide37.png', 'imgPerception/Slide38.png', 'imgPerception/Slide39.png', 'imgPerception/Slide40.png', 'imgPerception/Slide41.png', 'imgPerception/Slide42.png', 'imgPerception/Slide43.png', 'imgPerception/Slide44.png', 'imgPerception/Slide45.png', 'imgPerception/Slide46.png', 'imgPerception/Slide47.png', 'imgPerception/Slide48.png', 'imgPerception/Slide49.png', 'imgPerception/Slide50.png', 'imgPerception/Slide51.png', 'imgPerception/Slide52.png', 'imgPerception/Slide53.png', 'imgPerception/Slide54.png', 'imgPerception/Slide55.png', 'imgPerception/Slide56.png', 'imgPerception/Slide57.png', 'imgPerception/Slide58.png', 'imgPerception/Slide59.png', 'imgPerception/Slide60.png', 'imgPerception/Slide61.png', 'imgPerception/Slide62.png', 'imgPerception/Slide63.png', 'imgPerception/Slide64.png', 'imgPerception/Slide65.png', 'imgPerception/Slide66.png', 'imgPerception/Slide67.png', 'imgPerception/Slide68.png', 'imgPerception/Slide69.png', 'imgPerception/Slide70.png', 'imgPerception/Slide71.png', 'imgPerception/Slide72.png', 'imgPerception/Slide73.png', 'imgPerception/Slide74.png', 'imgPerception/Slide75.png', 'imgPerception/Slide76.png', 'imgPerception/Slide77.png', 'imgPerception/Slide78.png', 'imgPerception/Slide79.png', 'imgPerception/Slide80.png', 'imgPerception/Slide81.png', 'imgPerception/Slide82.png', 'imgPerception/Slide83.png', 'imgPerception/Slide84.png', 'imgPerception/Slide85.png', 'imgPerception/Slide86.png', 'imgPerception/Slide87.png', 'imgPerception/Slide88.png', 'imgPerception/Slide89.png', 'imgPerception/Slide90.png', 'imgPerception/Slide91.png', 'imgPerception/Slide92.png', 'imgPerception/Slide93.png', 'imgPerception/Slide94.png', 'imgPerception/Slide95.png', 'imgPerception/Slide96.png', 'imgPerception/Slide97.png', 'imgPerception/Slide98.png', 'imgPerception/Slide99.png', 'imgPerception/Slide100.png', 'imgPerception/Slide101.png', 'imgPerception/Slide102.png', 'imgPerception/Slide103.png', 'imgPerception/Slide104.png', 'imgPerception/Slide105.png', 'imgPerception/Slide106.png', 'imgPerception/Slide107.png', 'imgPerception/Slide108.png', 'imgPerception/Slide109.png', 'imgPerception/Slide110.png', 'imgPerception/Slide111.png', 'imgPerception/Slide112.png', 'imgPerception/Slide113.png', 'imgPerception/Slide114.png', 'imgPerception/Slide115.png', 'imgPerception/Slide116.png', 'imgPerception/Slide117.png', 'imgPerception/Slide118.png', 'imgPerception/Slide119.png', 'imgPerception/Slide120.png', 'imgPerception/Slide121.png', 'imgPerception/Slide122.png', 'imgPerception/Slide123.png', 'imgPerception/Slide124.png', 'imgPerception/Slide125.png', 'imgPerception/Slide126.png', 'imgPerception/Slide127.png', 'imgPerception/Slide128.png', 'imgPerception/Slide129.png', 'imgPerception/Slide130.png', 'imgPerception/Slide131.png', 'imgPerception/Slide132.png', 'imgPerception/Slide133.png', 'imgPerception/Slide134.png', 'imgPerception/Slide135.png', 'imgPerception/Slide136.png', 'imgPerception/Slide137.png', 'imgPerception/Slide138.png', 'imgPerception/Slide139.png', 'imgPerception/Slide140.png', 'imgPerception/Slide141.png', 'imgPerception/Slide142.png', 'imgPerception/Slide143.png', 'imgPerception/Slide144.png', 'imgPerception/Slide145.png', 'imgPerception/Slide146.png', 'imgPerception/Slide147.png', 'imgPerception/Slide148.png', 'imgPerception/Slide149.png', 'imgPerception/Slide150.png', 'imgPerception/Slide151.png', 'imgPerception/Slide152.png', 'imgPerception/Slide153.png', 'imgPerception/Slide154.png', 'imgPerception/Slide155.png', 'imgPerception/Slide156.png', 'imgPerception/Slide157.png', 'imgPerception/Slide158.png', 'imgPerception/Slide159.png', 'imgPerception/Slide160.png', 'imgPerception/Slide161.png', 'imgPerception/Slide162.png', 'imgPerception/Slide163.png', 'imgPerception/Slide164.png', 'imgPerception/Slide165.png', 'imgPerception/Slide166.png', 'imgPerception/Slide167.png', 'imgPerception/Slide168.png', 'imgPerception/Slide169.png', 'imgPerception/Slide170.png', 'imgPerception/Slide171.png', 'imgPerception/Slide172.png', 'imgPerception/Slide173.png', 'imgPerception/Slide174.png', 'imgPerception/Slide175.png', 'imgPerception/Slide176.png', 'imgPerception/Slide177.png', 'imgPerception/Slide178.png', 'imgPerception/Slide179.png', 'imgPerception/Slide180.png', 'imgPerception/Slide181.png', 'imgPerception/Slide182.png', 'imgPerception/Slide183.png', 'imgPerception/Slide184.png', 'imgPerception/Slide185.png', 'img/angersmetz.jpg', 'img/clavier.jpg', 'img/Colour_Trial.png', 'img/Editing images.pptx', 'img/espoireamitie.jpg', 'img/Face_Trial.png', 'img/hollande.jpg', 'img/imgblank.jpg', 'img/Letter_Trial.png', 'img/Map_Trial.png', 'img/Shape_Trial.png', 'img/T.png', 'img/vivacite 2.jpg', 'img/vivacite 3.jpg', 'img/vivacite 4.jpg', 'img/vivacite.jpg', 'audioStims/access.wav', 'audioStims/altruism.wav', 'audioStims/anxiety.wav', 'audioStims/artichokes.wav', 'audioStims/atlanta.wav', 'audioStims/atlanticcity.wav', 'audioStims/austin.wav', 'audioStims/bad.wav', 'audioStims/baguette.wav', 'audioStims/baltimore.wav', 'audioStims/banana.wav', 'audioStims/barackobama.wav', 'audioStims/bathtub.wav', 'audioStims/berniesanders.wav', 'audioStims/boston.wav', 'audioStims/bottle.wav', 'audioStims/bowl.wav', 'audioStims/bradpitt.wav', 'audioStims/brilliance.wav', 'audioStims/broom.wav', 'audioStims/bucket.wav', 'audioStims/burrito.wav', 'audioStims/care.wav', 'audioStims/cauliflower.wav', 'audioStims/chicken.wav', 'audioStims/cincinnati.wav', 'audioStims/cold.wav', 'audioStims/Color.wav', 'audioStims/comfort.wav', 'audioStims/convention.wav', 'audioStims/country.wav', 'audioStims/cucumber.wav', 'audioStims/culture.wav', 'audioStims/dallas.wav', 'audioStims/dark.wav', 'audioStims/decision.wav', 'audioStims/detroit.wav', 'audioStims/discipline.wav', 'audioStims/discovery.wav', 'audioStims/discussion.wav', 'audioStims/down.wav', 'audioStims/elonmusk.wav', 'audioStims/emmastone.wav', 'audioStims/employment.wav', 'audioStims/espresso.wav', 'audioStims/evocation.wav', 'audioStims/Face.wav', 'audioStims/fidelity.wav', 'audioStims/fig.wav', 'audioStims/flamingo.wav', 'audioStims/friendship.wav', 'audioStims/future.wav', 'audioStims/generality.wav', 'audioStims/generosity.wav', 'audioStims/georgewbush.wav', 'audioStims/greenapple.wav', 'audioStims/greenpepper.wav', 'audioStims/guacamole.wav', 'audioStims/hamster.wav', 'audioStims/health.wav', 'audioStims/help.wav', 'audioStims/hope.wav', 'audioStims/houston.wav', 'audioStims/illusion.wav', 'audioStims/impression.wav', 'audioStims/inference.wav', 'audioStims/johnnydepp.wav', 'audioStims/juliaroberts.wav', 'audioStims/justice.wav', 'audioStims/justinbieber.wav', 'audioStims/justintimberlake.wav', 'audioStims/kamalaharris.wav', 'audioStims/kangarou.wav', 'audioStims/kansascity.wav', 'audioStims/kevinhart.wav', 'audioStims/koala.wav', 'audioStims/ladybug.wav', 'audioStims/lasvegas.wav', 'audioStims/laziness.wav', 'audioStims/learning.wav', 'audioStims/left.wav', 'audioStims/lemon.wav', 'audioStims/leonardodicaprio.wav', 'audioStims/Letter.wav', 'audioStims/light.wav', 'audioStims/lighter.wav', 'audioStims/long.wav', 'audioStims/Map.wav', 'audioStims/mariotest2.wav', 'audioStims/markzuckerberg.wav', 'audioStims/marshmellow.wav', 'audioStims/matthewmcconaughey.wav', 'audioStims/memphis.wav', 'audioStims/mention.wav', 'audioStims/merit.wav', 'audioStims/miami.wav', 'audioStims/michaelphelps.wav', 'audioStims/minneapolis.wav', 'audioStims/mission.wav', 'audioStims/motivation.wav', 'audioStims/mystery.wav', 'audioStims/nashville.wav', 'audioStims/noise.wav', 'audioStims/opinion.wav', 'audioStims/oprahwinfrey.wav', 'audioStims/pan.wav', 'audioStims/panda.wav', 'audioStims/penalty.wav', 'audioStims/penguin.wav', 'audioStims/philadelphia.wav', 'audioStims/philosophy.wav', 'audioStims/phoenix.wav', 'audioStims/pineapple.wav', 'audioStims/pomogranate.wav', 'audioStims/portland.wav', 'audioStims/possession.wav', 'audioStims/prejudice.wav', 'audioStims/princewilliam.wav', 'audioStims/prove.wav', 'audioStims/pumpkin.wav', 'audioStims/quality.wav', 'audioStims/reality.wav', 'audioStims/reasoning.wav', 'audioStims/redwine.wav', 'audioStims/reject.wav', 'audioStims/retrieve.wav', 'audioStims/right.wav', 'audioStims/rigor.wav', 'audioStims/rihanna.wav', 'audioStims/round.wav', 'audioStims/routine.wav', 'audioStims/sarahjessicaparker.wav', 'audioStims/seattle.wav', 'audioStims/selenagomez.wav', 'audioStims/Semantic.wav', 'audioStims/sentence.wav', 'audioStims/serenawilliams.wav', 'audioStims/shakira.wav', 'audioStims/Shape.wav', 'audioStims/silence.wav', 'audioStims/smart.wav', 'audioStims/society.wav', 'audioStims/spirit.wav', 'audioStims/stevejobs.wav', 'audioStims/strawberry.wav', 'audioStims/summary.wav', 'audioStims/taylorswift.wav', 'audioStims/tripod.wav', 'audioStims/up.wav', 'audioStims/victory.wav', 'audioStims/warmth.wav', 'audioStims/washingtondc.wav', 'audioStims/whiteshark.wav', 'audioStims/willsmith.wav', 'audioStims/year.wav', 'audioStims/zucchini.wav']
  Routine sem_trial
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    TextComponent semantics_task_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Part 4/4: Test of Semantics
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    TextComponent semanticBlock_idx
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $semanticBlock.thisN
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    SoundComponent field_s
      sound [set every repeat] = $field
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent word1_s
      sound [set every repeat] = $word1_sem
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    SoundComponent word2_s
      sound [set every repeat] = $word2_sem
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    SoundComponent instr_s
      sound [set every repeat] = $instruction_sem
      startVal [time (s)] = 6
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    KeyboardComponent key_resp_vmi_s
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [condition] = $instr_s.status==FINISHED
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  Routine sem_instruction
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    TextComponent semantics_instruction_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Part 4/4: Test of Semantics
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    TextComponent semantics_instruction_task
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this last part, we will evaluate your association between abstract words.

        During this part, you will answer the questions by comparing the abstract characteristics based on the semantic relationship.
        For each trial, you will hear two abstract words after hearing the instruction “Semantics”. Then, you will hear the indication semantic word.
        Which of them is closer to the indication word?
        We will start with a practice trial.

        This Semantics Task will take about 3 minutes with 12 trials.
    KeyboardComponent semantics_instruction_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent semantics_instruction_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <Space> to proceed.
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  Routine semantics_task_trials
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    TextComponent semantics_task_trials_question
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $task_question
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    SoundComponent semantics_task_trials_word1
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      volume = 8
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    SoundComponent semantics_task_trials_word2
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $word2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      volume = 8
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    SoundComponent semantics_task_trials_instruction
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $instruction
      startVal [time (s)] = 4
      volume = 8
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    KeyboardComponent semantics_task_trials_response
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = $semantics_task_trials_instruction.status==FINISHED
      store = nothing
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    TextComponent semantics_task_trials_order_instruction
      color = black
      letterHeight = 0.03
      pos = (0, 0.13)
      saveStartStop = False
      startVal [time (s)] = 4.5
      text [set every repeat] = $order_instruction
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    TextComponent semantics_task_trials_proceed
      color = green
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 4.5
      text [set every repeat] = $task_continue
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    CodeComponent semantics_task_trials_align
      Code Type = Both
      disabled = True
      Begin JS Routine:
        semantics_task_trials_instruction.setAlignHoriz('left')
Flow
  Routine resource_manage
  Routine volume_test
  Routine key_test
  Routine begin_instruction
  Routine vivid_instruction
  Routine vviq_instruction
  LoopInitiator vviq_trials loopType="TrialHandler"
    conditionsFile = vviq_task_online.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'senario': "Think of some relative or friend whom you frequently see (but who is not with you at present), and consider carefully the picture that comes before your mind's eye. ", 'item': '1.The exact contour of face, head, shoulders, and body :', 'vviq_idx': '1 of 16 trials'},
      {'senario': None, 'item': '2. Characteristic poses of head, attitudes of body :', 'vviq_idx': '2 of 16 trials'},
      {'senario': None, 'item': '3. The precise carriage, length of step, etc., in walking :', 'vviq_idx': '3 of 16 trials'},
      {'senario': None, 'item': '4. The different colors worn in some familiar clothes :', 'vviq_idx': '4 of 16 trials'},
      {'senario': "Visualize a rising sun. Consider carefully the picture that comes before your mind's eye. ", 'item': '5. The sun is rising above the horizon into a hazy sky :', 'vviq_idx': '5 of 16 trials'},
      {'senario': None, 'item': '6. The sky clears and surrounds the sun with blueness :', 'vviq_idx': '6 of 16 trials'},
      {'senario': None, 'item': '7.Clouds. A storm blows up, with flashes of lightning :', 'vviq_idx': '7 of 16 trials'},
      {'senario': None, 'item': '8. A rainbow appears :', 'vviq_idx': '8 of 16 trials'},
      {'senario': "Think of the front of a shop to which you often go. Consider the picture that comes before your mind's eye.", 'item': '9. The overall appearance of the shop from the opposite side of the road : ', 'vviq_idx': '9 of 16 trials'}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
    Routine vviq_task
  LoopTerminator vviq_trials
  Routine vviq_feedback
  Routine imagery_instruction
  LoopInitiator imagery_domain loopType="TrialHandler"
    conditionsFile = Imagery_domain_selection.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practiceIdx': '0:1', 'trialRow': '0:18'},
      {'practiceIdx': '1:2', 'trialRow': '18:36'},
      {'practiceIdx': '2:3', 'trialRow': '36:54'},
      {'practiceIdx': '3:4', 'trialRow': '54:72'},
      {'practiceIdx': '4:5', 'trialRow': '72:90'}]
    LoopInitiator imagery_trials loopType="TrialHandler"
      Selected rows = $practice_idx
      conditionsFile = ImageryPractice_en.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'domain': 'audioStims/Color.wav', 'word1': 'audioStims/baguette.wav', 'word2': 'audioStims/cauliflower.wav', 'instruction': 'audioStims/dark.wav', 'correctAns': 1, 'img1': 'img/Colour_Trial.png', 'task_question': 'Colour: Which one is darker?', 'order_instruction': 'Test of Color.\nYou heard the following words: \'baguette\', \'cauliflower\', and the indication \'dark\'. For the test, first imagine the colour of the skin of a baguette and a cauliflower.\nWhich of them has a darker COLOR (or a lighter COLOR according to the given indication)? If it is \'baguette\', press the "1" key (correspo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,
        {'domain': 'audioStims/Face.wav', 'word1': 'audioStims/rihanna.wav', 'word2': 'audioStims/bradpitt.wav', 'instruction': 'audioStims/long.wav', 'correctAns': 1, 'img1': 'img/Face_Trial.png', 'task_question': 'Face: Which one is longer?', 'order_instruction': 'Test of Face Shape.\nYou heard the following words: \'Rihanna\', \'Brad Pitt\', and the indication \'long\'. For the test, first imagine the faces of these two celebrities. Which of them has a longer FACE (or a rounder FACE according to the given indication)?\nNote that \'long\' also means a more oval, elongated face and \'round\' also mea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,
        {'domain': 'audioStims/Letter.wav', 'word1': 'audioStims/culture.wav', 'word2': 'audioStims/prove.wav', 'instruction': 'audioStims/down.wav', 'correctAns': 2, 'img1': 'img/Letter_Trial.png', 'task_question': 'Letter: Which one exceeds the line spacing on the side of up or down?', 'order_instruction': 'Test of Letter.\nYou heard the following words: \'culture\', \'prove\', and the indication \'down\'. For the test, first imagine the words of \'culture\' and \'prove\' written in printing lowercase.\nWhich of them has at least one letter exceeding the line spacing on the side of DOWN (or UP accor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,
        {'domain': 'audioStims/Map.wav', 'word1': 'audioStims/washingtondc.wav', 'word2': 'audioStims/houston.wav', 'instruction': 'audioStims/left.wav', 'correctAns': 2, 'img1': 'img/Map_Trial.png', 'task_question': 'Map: Which one is to the left (West) of Chicago?', 'order_instruction': 'Test of U.S. Map.\nYou heard the following words: \'Washington D.C.\', \'Houston\', and the indication \'left\'. Do you know the position of cities on a map of U.S.? In this test, we ask you to visualize the position of the cities that will be proposed to you. We will then ask you to indicate which of them is locate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
      Routine imagery_task_trials
      Routine imagery_task_trials_vividness
      Routine resting
    LoopTerminator imagery_trials
    Routine imagery_task_prepare
    LoopInitiator imagery_task_items loopType="TrialHandler"
      Selected rows = $trialRow
      conditionsFile = ImageryItems_en.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'idx': 1, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/light.wav', 'correctAns': 1, 'imgCompare': 'None'},
        {'idx': 2, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/light.wav', 'correctAns': 1, 'imgCompare': 'None'},
        {'idx': 3, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/dark.wav', 'correctAns': 2, 'imgCompare': 'None'},
        {'idx': 4, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/dark.wav', 'correctAns': 1, 'imgCompare': 'None'},
        {'idx': 5, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/dark.wav', 'correctAns': 2, 'imgCompare': 'None'},
        {'idx': 6, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/light.wav', 'correctAns': 1, 'imgCompare': 'None'},
        {'idx': 7, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/dark.wav', 'correctAns': 2, 'imgCompare': 'None'},
        {'idx': 8, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/light.wav', 'correctAns': 2, 'imgCompare': 'None'},
        {'idx': 9, 'field': 'audioStims/Color.wav', 'img1': 'None', 'img2': 'None', 'instruction': 'audioStims/dark.wav', 'correctAns': 2, 'imgCompare': 'None'}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
      Routine imagery_task
      Routine imagery_task_vividness
      Routine resting
    LoopTerminator imagery_task_items
    Routine imagery_task_feedback
  LoopTerminator imagery_domain
  Routine perception_instruction
  LoopInitiator perception_task_trial loopType="TrialHandler"
    conditionsFile = PerceptionItems_en.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'idx': 1, 'field': 'audioStims/Shape.wav', 'word1': 'audioStims/hamster.wav', 'word2': 'audioStims/kangarou.wav', 'instruction': 'audioStims/round.wav', 'correctAns': 1, 'img1': 'imgPerception/Slide1.PNG', 'img2': 'imgPerception/Slide2.PNG', 'imgCompare': 'imgPerception/Slide3.PNG'},
      {'idx': 2, 'field': 'audioStims/Shape.wav', 'word1': 'audioStims/bucket.wav', 'word2': 'audioStims/broom.wav', 'instruction': 'audioStims/long.wav', 'correctAns': 2, 'img1': 'imgPerception/Slide4.PNG', 'img2': 'imgPerception/Slide5.PNG', 'imgCompare': 'imgPerception/Slide6.PNG'},
      {'idx': 3, 'field': 'audioStims/Shape.wav', 'word1': 'audioStims/bottle.wav', 'word2': 'audioStims/pan.wav', 'instruction': 'audioStims/long.wav', 'correctAns': 1, 'img1': 'imgPerception/Slide7.PNG', 'img2': 'imgPerception/Slide8.PNG', 'imgCompare': 'imgPerception/Slide9.PNG'},
      {'idx': 4, 'field': 'audioStims/Shape.wav', 'word1': 'audioStims/bathtub.wav', 'word2': 'audioStims/tripod.wav', 'instruction': 'audioStims/round.wav', 'correctAns': 1, 'img1': 'imgPerception/Slide10.PNG', 'img2': 'imgPerception/Slide11.PNG', 'imgCompare': 'imgPerception/Slide12.PNG'},
      {'idx': 5, 'field': 'audioStims/Shape.wav', 'word1': 'audioStims/whiteshark.wav', 'word2': 'audioStims/ladybug.wav', 'instruction': 'audioStims/long.wav', 'correctAns': 1, 'img1': 'imgPerception/Slide13.PNG', 'img2': 'imgPerception/Slide14.PNG', 'imgCompare': 'imgPerception/Slide15.PNG'}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
    Routine perception_task
    Routine perception_task_confidence
    Routine resting
  LoopTerminator perception_task_trial
  Routine perception_task_feedback
  Routine sem_instruction
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'domain': 'audioStims/Semantics.wav', 'word1': 'audioStims/brilliance.wav', 'word2': 'audioStims/decision.wav', 'instruction': 'audioStims/merit.wav', 'correctAns': 1, 'task_question': 'Which one is semantically closer to "merit"?', 'order_instruction': 'Test of Semantics.\nYou heard the following words: \'brilliance\', \'decision\', and the indication \'merit\'. For the test, consider the association between abstract words.\nWhich of them is semantically closer to the indication word "merit"? If it is \'brilliance\', press the "1" key (corresponding to the first heard word). If it is \'deci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
    conditionsFile = SemanticsPractice_en.xlsx
    loopType = sequential
    nReps = 1
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    Routine semantics_task_trials
  LoopTerminator trials
  LoopInitiator semanticBlock loopType="TrialHandler"
    conditionsFile = SemanticItems.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'idx': 1, 'field': 'audioStims/Semantic.wav', 'word1_sem': 'audioStims/country.wav', 'word2_sem': 'audioStims/philosophy.wav', 'instruction_sem': 'audioStims/discipline.wav', 'correctAns_sem': 'right', 'img1_sem': 'None', 'img2_sem': 'None', 'imgCompare_sem': 'None', 'triggerStart_sem': 211, 'Tri_word1_sem': 78, 'Tri_word2_sem': 182},
      {'idx': 2, 'field': 'audioStims/Semantic.wav', 'word1_sem': 'audioStims/health.wav', 'word2_sem': 'audioStims/penalty.wav', 'instruction_sem': 'audioStims/comfort.wav', 'correctAns_sem': 'left', 'img1_sem': 'None', 'img2_sem': 'None', 'imgCompare_sem': 'None', 'triggerStart_sem': 211, 'Tri_word1_sem': 177, 'Tri_word2_sem': 183},
      {'idx': 3, 'field': 'audioStims/Semantic.wav', 'word1_sem': 'audioStims/fidelity.wav', 'word2_sem': 'audioStims/generality.wav', 'instruction_sem': 'audioStims/quality.wav', 'correctAns_sem': 'left', 'img1_sem': 'None', 'img2_sem': 'None', 'imgCompare_sem': 'None', 'triggerStart_sem': 211, 'Tri_word1_sem': 178, 'Tri_word2_sem': 184},
      {'idx': 4, 'field': 'audioStims/Semantic.wav', 'word1_sem': 'audioStims/motivation.wav', 'word2_sem': 'audioStims/laziness.wav', 'instruction_sem': 'audioStims/anxiety.wav', 'correctAns_sem': 'right', 'img1_sem': 'None', 'img2_sem': 'None', 'imgCompare_sem': 'None', 'triggerStart_sem': 211, 'Tri_word1_sem': 179, 'Tri_word2_sem': 86}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
    Routine sem_trial
  LoopTerminator semanticBlock
  Routine end_session
